PsychoPy2experiment version="2021.1.4"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1366, 768]
  color = $(-1.0000, -1.0000, -1.0000)
  expName = tesis
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Routines
  Routine intro
    TextComponent intro1
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        Este estudio consta dos partes. A lo largo del mismo vas a ir aprendiendo cosas. Es necesario que prestes atención a los estimulos que se te van a ir presentando en pantalla.

        Al finalizar, te vamos a hacer algunas preguntas personales. Es importante que sepas que las respuestas serán tratadas de manera confidencial. Los resultados obtenidos de esta investigación, serán comunicados en eventos científicos y publicados en revistas científicas.

        APRETA LA BARRA ESPACIADORA PARA CONTINUAR
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine intro2
    TextComponent introduccion2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Tu participación es voluntaria:
        podés rehusarte a participar o interrumpir tu participación en cualquier momento sin tener que expresar tus razones con el boton "esc".


        APRETA LA BARRA ESPACIADORA PARA CONTINUAR
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine final
    TextComponent final1
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        Hemos finalizado el experimento.

        Gracias por participar del mismo, ahora le haremos un par de preguntas.

        La calidad de nuestra investigación depende de la calidad de los datos que obtengamos.
        Por favor, respondé con sinceridad si podemos contar con tus respuestas.

        APRETA BARRA ESPACIADORA PARA CONTINUAR
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine pregunta1
    TextComponent preg1
      letterHeight = 0.04
      pos = (0, 0.05)
      startVal [time (s)] = 0.0
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      text:
        ¿Hay algo que ocurrió durante el experimento que nos quieras comunicar o que necesitemos saber?  Por favor, escribilo acá abajo.

        "Por ejemplo: tuve que atender el telefono"

        Al finalizar apreta 1
    KeyboardComponent key_resp_4
      allowedKeys = '1'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextboxComponent textbox
      bold = False
      borderColor = $(0.8824, 0.9451, 1.0000)
      editable = True
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
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  Routine pregunta2
    TextComponent text
      letterHeight = 0.05
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        ¿Conocías agunas de las letras que se mostraron en el experimento?

        Al finalizar apreta la barra espaciadora
    KeyboardComponent key_resp_5
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ButtonComponent button
      bold = True
      borderColor = $(0.9216, 0.9216, 0.9216)
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      text [set every repeat] = SI
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    ButtonComponent button_2
      bold = True
      borderColor = $(0.9216, 0.9216, 0.9216)
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text = NO
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  Routine final_2
    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Muchas gracias por completar el experimento.
        Éste tiene como objetivo investigar sobre el aprendizaje de conceptos en las personas.
        Tus resultados ayudarán a comprender mejor estos temas, ademas de estar ayudando a la realización de una tesis.

        Apreta la barra espaciadora para finalizar
    KeyboardComponent key_resp_6
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine entrenamiento1
    ImageComponent image
      image [set every repeat] = $muestra
      pos = (0, 0.3)
      size = (0.2, 0.2)
      startVal [time (s)] = 1.0
      stopVal [time (s)] = 4.0
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    ImageComponent image_2
      image [set every repeat] = $comp1
      pos = (-0.3, -0.05)
      size = (0.2, 0.2)
      startVal [time (s)] = 1.0
      stopVal [time (s)] = 4.0
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    ImageComponent image_3
      image [set every repeat] = $comp2
      pos = (0.3, -0.05)
      size = (0.2, 0.2)
      startVal [time (s)] = 1.0
      stopVal [time (s)] = 4.0
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    KeyboardComponent flechas
      allowedKeys [set every repeat] = 'left','right'
      correctAns = $correct_key
      forceEndRoutine = True
      startVal [time (s)] = 1.0
      stopVal [time (s)] = 4.0
      storeCorrect = True
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    TextComponent crux
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 1.0
      text = +
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    CodeComponent code2
      Code Type = Auto->JS
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      Begin Experiment:
        puntitos = list()
        contador = 0
      End Routine:
        contador += 1
        if not flechas.keys:
            feedback = "muy lento!"
        elif flechas.keys == str(correct_key):
            feedback = "bien hecho :)"
            puntitos.append(1)
        else:
            feedback = "error :("
            puntitos.append(0)
  Routine feddback
    TextComponent text_3
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text [set every repeat] = $feedback
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    CodeComponent code
      Code Type = Auto->JS
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      End Routine:
        if contador >= 30:
            if sum(puntitos[-28:])/30 >= 0.93:
                trials.finished = True
  Routine testeo
    ImageComponent image_4
      image [set every repeat] = $muestra
      pos = (0, 0.3)
      size = (0.2, 0.2)
      startVal [time (s)] = 1.0
      stopVal [time (s)] = 4.0
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    ImageComponent image_5
      image [set every repeat] = $comp1
      pos = (-0.3, -0.05)
      size = (0.2, 0.2)
      startVal [time (s)] = 1.0
      stopVal [time (s)] = 4.0
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    ImageComponent image_6
      image [set every repeat] = $comp2
      pos = (0.3, -0.05)
      size = (0.2, 0.2)
      startVal [time (s)] = 1.0
      stopVal [time (s)] = 4.0
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    KeyboardComponent flechas_2
      allowedKeys [set every repeat] = 'left','right'
      correctAns = $correcta
      forceEndRoutine = True
      startVal [time (s)] = 1.0
      stopVal [time (s)] = 4.0
      storeCorrect = True
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    TextComponent crux_2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 1.0
      text = +
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    CodeComponent code2_2
      Code Type = Auto->JS
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      End Routine:
        if not flechas_2.keys:
            feedback = "muy lento!"
            duracionn = 1
        #elif flechas_2.keys == str(correcta):
            #feedback = "bien hecho :)"
        else:
            feedback = "++"
            duracionn = 0
  Routine fedbackteste1
    TextComponent text_4
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = duracionn
      text [set every repeat] = $feedback
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  Routine entrenamiento2
    ImageComponent image_7
      image [set every repeat] = $muestra
      pos = (0, 0.3)
      size [set every repeat] = (0.4, 0.2)
      startVal [time (s)] = 1.0
      stopVal [time (s)] = 4.0
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    ImageComponent image_8
      image [set every repeat] = $comp1
      pos = (-0.3, -0.05)
      size = (0.2, 0.2)
      startVal [time (s)] = 1.0
      stopVal [time (s)] = 4.0
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    ImageComponent image_9
      image [set every repeat] = $comp2
      pos = (0.3, -0.05)
      size = (0.2, 0.2)
      startVal [time (s)] = 1.0
      stopVal [time (s)] = 4.0
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    KeyboardComponent flechas_3
      allowedKeys [set every repeat] = 'left','right'
      correctAns = $correct_key
      forceEndRoutine = True
      startVal [time (s)] = 1.0
      stopVal [time (s)] = 4.0
      storeCorrect = True
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    TextComponent crux_3
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 1.0
      text = +
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    CodeComponent code2_3
      Code Type = Auto->JS
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      Begin Experiment:
        contador2 = 0
        puntitos2 = list()
      End Routine:
        contador2 += 1
        if not flechas_3.keys:
            feedback = "muy lento!"
        elif flechas_3.keys == str(correct_key):
            feedback = "bien hecho :)"
            puntitos2.append(1)
        else:
            feedback = "error :("
            puntitos2.append(0)
  Routine feedback2
    TextComponent text_5
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text [set every repeat] = $feedback
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    CodeComponent code_2
      Code Type = Auto->JS
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      End Routine:
        if contador2 >= 30:
            if sum(puntitos2[-28:])/30 >= 0.93:
                trials3.finished = True
  Routine entrenamiento3
    ImageComponent image_10
      image [set every repeat] = $muestra
      pos = (0, 0.3)
      size [set every repeat] = (0.4, 0.2)
      startVal [time (s)] = 1.0
      stopVal [time (s)] = 4.0
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    ImageComponent image_11
      image [set every repeat] = $comp1
      pos = (-0.3, -0.05)
      size = (0.2, 0.2)
      startVal [time (s)] = 1.0
      stopVal [time (s)] = 4.0
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    ImageComponent image_12
      image [set every repeat] = $comp2
      pos = (0.3, -0.05)
      size = (0.2, 0.2)
      startVal [time (s)] = 1.0
      stopVal [time (s)] = 4.0
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    KeyboardComponent flechas_4
      allowedKeys [set every repeat] = 'left','right'
      correctAns = $correct_key
      forceEndRoutine = True
      startVal [time (s)] = 1.0
      stopVal [time (s)] = 4.0
      storeCorrect = True
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    TextComponent crux_4
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 1.0
      text = +
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    CodeComponent code2_4
      Code Type = Auto->JS
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      Begin Experiment:
        contador3 = 0
        puntitos3 = list()
      End Routine:
        contador3 += 1
        if not flechas_4.keys:
            feedback = "muy lento!"
        elif flechas_4.keys == str(correct_key):
            feedback = "bien hecho :)"
            puntitos3.append(1)
        else:
            feedback = "error :("
            puntitos3.append(0)
  Routine feedback3
    TextComponent text_6
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text [set every repeat] = $feedback
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    CodeComponent code_3
      Code Type = Auto->JS
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      End Routine:
        if contador3 >= 30:
            if sum(puntitos3[-28:])/30 >= 0.93:
                trials4.finished = True
  Routine indicaciones
    TextComponent text_7
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        En el experimento vas a tener que apretar las flechas izquierda y derecha para elegir la opcion correcta. Tenes un limite de 3 segundos para responder

        APRETA LA BARRA ESPACIADORA PARA CONTINUAR
    KeyboardComponent key_resp_7
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine testeo2
    ImageComponent image_13
      image [set every repeat] = $muestra
      pos = (0, 0.3)
      size = (0.2, 0.2)
      startVal [time (s)] = 1.0
      stopVal [time (s)] = 4.0
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    ImageComponent image_14
      image [set every repeat] = $comp1
      pos = (-0.3, -0.05)
      size = (0.2, 0.2)
      startVal [time (s)] = 1.0
      stopVal [time (s)] = 4.0
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    ImageComponent image_15
      image [set every repeat] = $comp2
      pos = (0.3, -0.05)
      size = (0.2, 0.2)
      startVal [time (s)] = 1.0
      stopVal [time (s)] = 4.0
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    KeyboardComponent flechas_5
      allowedKeys [set every repeat] = 'left','right'
      correctAns = $correcta
      forceEndRoutine = True
      startVal [time (s)] = 1.0
      stopVal [time (s)] = 4.0
      storeCorrect = True
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    TextComponent crux_5
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 1.0
      text = +
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    CodeComponent code2_5
      Code Type = Auto->JS
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      End Routine:
        if not flechas_5.keys:
            feedback = "muy lento!"
            duracionn = 1
        #elif flechas_5.keys == str(correcta):
            #feedback = "bien hecho :)"
        else:
            feedback = "++"
            duracionn = 0
  Routine feedbackteste2
    TextComponent text_8
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = duracionn
      text [set every repeat] = $feedback
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  Routine pausa
    TextComponent text_9
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        PAUSA


        Tomese un tiempo para descansar la vista.
        Cuando este listo presione la barra espaciadora para continuar.
    KeyboardComponent key_resp_8
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine intro
  Routine intro2
  Routine indicaciones
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = entrenamiento1.xlsx
    loopType = random
    nReps = 8
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    conditions:
      [{'muestra': 'A1.png', 'comp1': 'B1.png', 'comp2': 'B2.png', 'correcta': 'left', 'relacion': 'A-B'},
      {'muestra': 'A2.png', 'comp1': 'B1.png', 'comp2': 'B2.png', 'correcta': 'right', 'relacion': 'A-B'},
      {'muestra': 'A1.png', 'comp1': 'B2.png', 'comp2': 'B1.png', 'correcta': 'right', 'relacion': 'A-B'},
      {'muestra': 'A2.png', 'comp1': 'B2.png', 'comp2': 'B1.png', 'correcta': 'left', 'relacion': 'A-B'}]
    Routine entrenamiento1
    Routine feddback
  LoopTerminator trials
  LoopInitiator trials_3 loopType="TrialHandler"
    conditionsFile = entrenamiento2.xlsx
    loopType = random
    nReps = 8
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    conditions:
      [{'muestra': 'CY1.png', 'comp1': 'B1.png', 'comp2': 'B2.png', 'correct_key': 'left', 'relacion': 'CY-B'},
      {'muestra': 'CY1.png', 'comp1': 'B2.png', 'comp2': 'B1.png', 'correct_key': 'right', 'relacion': 'CY-B'},
      {'muestra': 'CY2.png', 'comp1': 'B2.png', 'comp2': 'B1.png', 'correct_key': 'left', 'relacion': 'CY-B'},
      {'muestra': 'CY2.png', 'comp1': 'B1.png', 'comp2': 'B2.png', 'correct_key': 'right', 'relacion': 'CY-B'}]
    Routine entrenamiento2
    Routine feedback2
  LoopTerminator trials_3
  LoopInitiator trials_4 loopType="TrialHandler"
    conditionsFile = entrenamiento3.xlsx
    isTrials = False
    loopType = random
    nReps = 0
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    conditions:
      [{'muestra': 'AX1.png', 'comp1': 'B1.png', 'comp2': 'B2.png', 'correct_key': 'left', 'relacion': 'AX-B'},
      {'muestra': 'AX1.png', 'comp1': 'B2.png', 'comp2': 'B1.png', 'correct_key': 'right', 'relacion': 'AX-B'},
      {'muestra': 'AX2.png', 'comp1': 'B2.png', 'comp2': 'B1.png', 'correct_key': 'left', 'relacion': 'AX-B'},
      {'muestra': 'AX2.png', 'comp1': 'B1.png', 'comp2': 'B2.png', 'correct_key': 'right', 'relacion': 'AX-B'}]
    Routine entrenamiento3
    Routine feedback3
  LoopTerminator trials_4
  Routine pausa
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = testeo1.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'muestra': 'C1.png', 'comp1': 'X1.png', 'comp2': 'X2.png', 'correcta': 'left', 'relacion': 'C-X'},
      {'muestra': 'C2.png', 'comp1': 'X1.png', 'comp2': 'X2.png', 'correcta': 'right', 'relacion': 'C-X'},
      {'muestra': 'C1.png', 'comp1': 'X2.png', 'comp2': 'X1.png', 'correcta': 'right', 'relacion': 'C-X'},
      {'muestra': 'C2.png', 'comp1': 'X2.png', 'comp2': 'X1.png', 'correcta': 'left', 'relacion': 'C-X'},
      {'muestra': 'A1.png', 'comp1': 'Y1.png', 'comp2': 'Y2.png', 'correcta': 'left', 'relacion': 'A-Y'},
      {'muestra': 'A2.png', 'comp1': 'Y1.png', 'comp2': 'Y2.png', 'correcta': 'right', 'relacion': 'A-Y'},
      {'muestra': 'A1.png', 'comp1': 'Y2.png', 'comp2': 'Y1.png', 'correcta': 'right', 'relacion': 'A-Y'},
      {'muestra': 'A2.png', 'comp1': 'Y2.png', 'comp2': 'Y1.png', 'correcta': 'left', 'relacion': 'A-Y'},
      {'muestra': 'B1.png', 'comp1': 'X1.png', 'comp2': 'X2.png', 'correcta': 'left', 'relacion': 'B-X'},
      {'muestra': 'B2.png', 'comp1': 'X1.png', 'comp2': 'X2.png', 'correcta': 'right', 'relacion': 'B-X'},
      {'muestra': 'B1.png', 'comp1': 'X2.png', 'comp2': 'X1.png', 'correcta': 'right', 'relacion': 'B-X'},
      {'muestra': 'B2.png', 'comp1': 'X2.png', 'comp2': 'X1.png', 'correcta': 'left', 'relacion': 'B-X'},
      {'muestra': 'B1.png', 'comp1': 'Y1.png', 'comp2': 'Y2.png', 'correcta': 'left', 'relacion': 'B-Y'},
      {'muestra': 'B2.png', 'comp1': 'Y1.png', 'comp2': 'Y2.png', 'correcta': 'right', 'relacion': 'B-Y'},
      {'muestra': 'B1.png', 'comp1': 'Y2.png', 'comp2': 'Y1.png', 'correcta': 'right', 'relacion': 'B-Y'}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
    Routine testeo
    Routine fedbackteste1
  LoopTerminator trials_2
  LoopInitiator trials_5 loopType="TrialHandler"
    conditionsFile = testeo2.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'muestra': 'X1.png', 'comp1': 'B1.png', 'comp2': 'B2.png', 'correcta': 'left', 'relacion': 'X-B'},
      {'muestra': 'X2.png', 'comp1': 'B1.png', 'comp2': 'B2.png', 'correcta': 'right', 'relacion': 'X-B'},
      {'muestra': 'X1.png', 'comp1': 'B2.png', 'comp2': 'B1.png', 'correcta': 'right', 'relacion': 'X-B'},
      {'muestra': 'X2.png', 'comp1': 'B2.png', 'comp2': 'B1.png', 'correcta': 'left', 'relacion': 'X-B'},
      {'muestra': 'Y1.png', 'comp1': 'B1.png', 'comp2': 'B2.png', 'correcta': 'left', 'relacion': 'Y-B'},
      {'muestra': 'Y2.png', 'comp1': 'B1.png', 'comp2': 'B2.png', 'correcta': 'right', 'relacion': 'Y-B'},
      {'muestra': 'Y1.png', 'comp1': 'B2.png', 'comp2': 'B1.png', 'correcta': 'right', 'relacion': 'Y-B'},
      {'muestra': 'Y2.png', 'comp1': 'B2.png', 'comp2': 'B1.png', 'correcta': 'left', 'relacion': 'Y-B'}]
    Routine testeo2
    Routine feedbackteste2
  LoopTerminator trials_5
  Routine final
  Routine pregunta1
  Routine pregunta2
  Routine final_2
